PsychoPy2experiment version="2026.1.3"
Settings
  expName = angel_paradigm_builder
  Audio lib = ptb
  runMode = 0
  Show info dlg = False
  Experiment info = {"participant":"test","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1280,800]
  Units = height
  Data filename = u'data/%s_%s_%s' % (engine.CURRENT_ARGS.participant if ('engine' in globals() and hasattr(engine, 'CURRENT_ARGS') and engine.CURRENT_ARGS) else expInfo['participant'], expName, expInfo['date'])
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  Save csv file = True
  keyboardBackend = PsychToolbox
  Full-screen size = [1280,800]
  Saved data folder = data
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Routines
  Routine trial
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  Routine Init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import angel_paradigm_coder as engine
        args = engine.parse_args()
        args = engine.show_config_dialog(args)
        engine.CURRENT_ARGS = args
      Begin Experiment:
        import random as std_random
        args = engine.CURRENT_ARGS
        levels = [level.strip() for level in args.levels.split(',') if level.strip()]
        engine.validate_config(args)
        # Synchronize KEYS and participant ID
        engine.KEYS['left'] = engine.parse_keys_list(args.left_keys)
        engine.KEYS['right'] = engine.parse_keys_list(args.right_keys)
        engine.KEYS['continue'] = engine.parse_keys_list(getattr(args, 'continue_keys', 'any'))
        engine.KEYS['trigger'] = engine.parse_keys_list(args.trigger_keys)
        KEYS = engine.KEYS
        expInfo['participant'] = args.participant
        thisExp.extraInfo['participant'] = args.participant
        exp_clock = core.Clock()
        markers = engine.MarkerSender(args, core, exp_clock)
        rng = std_random.Random(args.seed)
        assets_by_level = {lvl: engine.load_assets(args.resource_root / engine.LEVEL_TEMPLATES[lvl], args.language) for lvl in levels}
        assets = assets_by_level[levels[0]]
      End Experiment:
        # Stop and delete all cached audio objects to drain Core Audio HALC queue
        try:
            for _snd in list(audio_cache.values()):
                _snd.stop()
            audio_cache.clear()
        except (NameError, Exception):
            pass
        import time as _time
        _time.sleep(0.5)
        markers.close()
  Routine Instructions
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    CodeComponent instruction_code
      Code Type = Py
      Begin Experiment:
        inst_audio = None
      Begin Routine:
        if args.skip_instructions:
            continueRoutine = False
        else:
            inst_img = str(assets['language'] / 'InstructionLevel1.PNG')
            instruction_image.setImage(inst_img)
            if args.audio_instructions:
                inst_audio_path = assets['language'] / 'InstructionLevel1.mp3'
                if inst_audio_path.exists():
                    try:
                        inst_audio = sound.Sound(str(inst_audio_path))
                        inst_audio.play()
                    except Exception:
                        inst_audio = None
      End Routine:
        if 'inst_audio' in locals() and inst_audio:
            inst_audio.stop()
    ImageComponent instruction_image
      startVal [time (s)] = 0.0
      size = (1.333, 1.0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/InstructionLevel1.PNG
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    KeyboardComponent instruction_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.slide_timeout if 'args' in locals() and args.slide_timeout > 0 else ''
      forceEndRoutine = True
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  Routine TriggerWait
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    CodeComponent trigger_code
      Code Type = Py
      Begin Routine:
        if not args.fmri_mode:
            continueRoutine = False
    TextComponent trigger_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.wait_duration_s if 'args' in locals() else 11.0
      units = height
      text = Waiting for scanner trigger (s)...
      letterHeight = 0.05
      height = 0.05
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    KeyboardComponent trigger_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.wait_duration_s if 'args' in locals() else 11.0
      forceEndRoutine = True
      allowedKeys = 'space', 's', '4', '9'
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  Routine TrialRoutine
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    ImageComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (0.075, 0.075)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/plus.png
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    ImageComponent left_mask
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (0.32, 0.41)
      pos = (-0.42, 0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    ImageComponent right_mask
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      size = (0.32, 0.41)
      pos = (0.42, 0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    ImageComponent target_stim
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
      size = (0.32, 0.41)
      pos = (-0.42, 0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/faa01.png
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    ImageComponent top_distractor
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
      size = (0.12, 0.085)
      pos = (-0.18, 0.34)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    ImageComponent bottom_distractor
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
      size = (0.12, 0.085)
      pos = (-0.18, -0.34)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
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    KeyboardComponent response_key
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.70
      forceEndRoutine = False
      allowedKeys = 'left', 'right', 'z', 'slash', '1', '2', '4', '9'
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    CodeComponent trial_runner
      Code Type = Py
      Begin Experiment:
        trial_counter = 0
        trials = []
      Begin Routine:
        # ==============================================================================
        # ANGEL TRIAL CONTROLLER: MICROSECOND-ACCURATE ENGINE
        # ==============================================================================
        # The visual components above represent the trial display structure in Studio.
        # Execution uses hardware-synced drawing, audio offsets, and event markers below.
        # ==============================================================================
        if 'session_initialized' not in locals():
            session_initialized = True
            assets = assets_by_level[levels[0]]
            stimuli = engine.make_stimuli(win, visual, assets)
            audio_cache = engine.make_audio_cache(sound, assets)
            # Adapter so run_practice_phase can log directly to PsychoPy ExperimentHandler
            class _PsyWriter:
                def writerow(self, row):
                    for k, v in row.items():
                        thisExp.addData(k, v)
                    thisExp.nextEntry()
            class _PsyFile:
                def flush(self): pass
            # 1. Run Practice Phase (if practice > 0)
            trial_counter = engine.run_practice_phase(
                levels, args, win, core, event, visual, sound,
                _PsyWriter(), _PsyFile(), rng, 0, exp_clock, markers
            )
            # 2. Main Blocks Loop
            active_trials, baseline_trials = engine.parse_trials_per_block(args.trials_per_block)
            block_trial_count = active_trials + baseline_trials
            total_main_trials = args.blocks * block_trial_count
            for level in levels:
                assets = assets_by_level[level]
                stimuli = engine.make_stimuli(win, visual, assets)
                audio_cache = engine.make_audio_cache(sound, assets)
                block_rows = []
                for trial in engine.generate_level_trials(
                    level, args.blocks, rng, args.category_set,
                    args.paired_tone_offset_mode, args.paired_tone_offset_min,
                    args.paired_tone_offset_max, args.cd_schedule,
                    active_trials, baseline_trials, args.level2_cd
                ):
                    if trial.trial_in_block == 1:
                        markers.send('block_start')
                    trial_counter += 1
                    block_name = f'level{level}_block{trial.block:02d}'
                    row = engine.run_trial(
                        trial, args, win, core, event, visual, sound, stimuli,
                        assets, audio_cache, rng, trial_counter, exp_clock, markers, block_name
                    )
                    row['phase'] = 'main'
                    block_rows.append(row)
                    for k, v in row.items():
                        thisExp.addData(k, v)
                    thisExp.nextEntry()
                    # Block Feedback (governed by feedback_frequency: 1 or 2 blocks)
                    if trial.trial_in_block == block_trial_count and trial.block % getattr(args, 'feedback_frequency', 2) == 0:
                        if args.show_feedback:
                            engine.show_feedback(
                                win, event, visual, sound, assets['language'],
                                block_rows[-2 * block_trial_count:],
                                len(block_rows), total_main_trials
                            )
                    # Level 2 Reversal Rule Slide (at halfway point)
                    if level == '2' and trial.block == args.blocks // 2 and trial.trial_in_block == block_trial_count:
                        reversal = visual.TextStim(win,
                            text=f'Rule change\n\nMeaningful: RIGHT\nAmbiguous: LEFT\n\nPress {engine._continue_hint()} to continue',
                            color='white', height=0.04, units='height')
                        reversal.draw()
                        win.flip()
                        engine.wait_for_continue(event)
                # Level Session Summary
                if args.show_feedback:
                    engine.show_session_summary(win, event, visual, sound, assets['language'], block_rows, label=f'Level {level} Session')
        continueRoutine = False
  Routine Feedback
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        if not args.show_feedback:
            continueRoutine = False
    ImageComponent feedback_image
      startVal [time (s)] = 0.0
      size = (1.05, 0.78)
      pos = (0, 0.14)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/FeedbackGoodjob.PNG
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    TextComponent feedback_text
      startVal [time (s)] = 0.0
      pos = (0, -0.34)
      units = height
      text = Session Complete! Press any key to continue...
      letterHeight = 0.05
      height = 0.035
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    KeyboardComponent feedback_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.slide_timeout if 'args' in locals() and args.slide_timeout > 0 else ''
      forceEndRoutine = True
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  Routine End
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    ImageComponent end_image
      startVal [time (s)] = 0.0
      size = (1.333, 1.0)
      units = height
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/ExperimentEnd.PNG
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    KeyboardComponent end_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.slide_timeout if 'args' in locals() and args.slide_timeout > 0 else ''
      forceEndRoutine = True
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Flow
  Routine Init
  Routine Instructions
  Routine TriggerWait
  Routine TrialRoutine
  Routine Feedback
  Routine End
